PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['loop1_test.xlsx', 'loop2_test.xlsx']
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  expName = go no-go practice
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Routines
  Routine 结束语1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        辛苦啦，请稍事休息~

        休息好后请按任意键进行下一个练习！
    KeyboardComponent key_resp_6
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 结束语2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您的参与，实验到此结束！
        按任意键退出。
    KeyboardComponent key_resp_4
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 刺激1
    TextComponent stim1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $stimuli1
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    KeyboardComponent key_resp_12
      allowedKeys [set every repeat] = 'space'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine 空屏1
    PolygonComponent polygon_2
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine 指导语1
    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加本次实验。
        请先输入您配偶的名字以及ta的两个昵称
        明白后按任意键开始输入
    KeyboardComponent key_resp_1
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 空屏2
    PolygonComponent polygon_4
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine 指导语2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        请注意！！！
        这次是当出现消极词、您配偶的名字或昵称时，
        请快速且准确的按键盘空格键。
        而当出现积极词时，
        请不要按任何键。
        明白后按任意键进入实验。
    KeyboardComponent key_resp
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 刺激2
    TextComponent stim2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $stimuli2
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    KeyboardComponent key_resp_13
      allowedKeys [set every repeat] = 'space'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine 注视点
    PolygonComponent polygon_1
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        rt1=0
      Begin Routine:
        from numpy.random import shuffle

        d=[0.5, 0.6, 0.7, 0.8, 0.9, 1.0]
        shuffle(d)
        rt1=d.pop()

        thisExp.addData("rt1",rt1)
  Routine 练习1
    TextComponent stim_prac1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimuli1
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'space'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine 练习结束语1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 恭喜您完成了练习，下面请按任意键开始进入正式实验！
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    KeyboardComponent key_resp_8
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 练习指导语1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加本次实验。
        接下来将会出现一些积极词，
        消极词以及您配偶相关的称呼。
        当出现积极词，您配偶相关的词时请按空格键！
        明白后，请按任意键进行练习。
    KeyboardComponent key_resp_5
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback1
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = ''
        a = []
      Begin Routine:
        # 假设 key_resp_12.keys 是按键响应, key_resp_7.corr 是一个布尔值，表示响应是否正确
        if signal == 'Go':
            if key_resp_12.keys == 'space':
                feedback = "正确!"
                feedback_color = 'green'
                key_resp_12.corr = True
            else:
                feedback = "错误!"
                feedback_color = 'red'
                key_resp_12.corr = False

        elif signal == 'No-Go':
            if key_resp_12.keys is None or key_resp_12.keys == '':
                feedback = "正确!"
                feedback_color = 'green'
                key_resp_12.corr = True
            else:
                feedback = "错误!"
                feedback_color = 'red'
                key_resp_12.corr = False

        # 累计正确响应次数
        if 'a' not in locals():  # 初始化a
            a = []

        a.append(key_resp_12.corr)
        b = sum(a)
    TextComponent text_4
      color [set every repeat] = $feedback_color
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $feedback
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  Routine feedback2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = ''
        a = []
      Begin Routine:
        # 假设 key_resp_13.keys 是按键响应, key_resp_7.corr 是一个布尔值，表示响应是否正确
        if signal == 'Go':
            if key_resp_13.keys == 'space':
                feedback = "正确!"
                feedback_color = 'green'
                key_resp_13.corr = True
            else:
                feedback = "错误!"
                feedback_color = 'red'
                key_resp_13.corr = False

        elif signal == 'No-Go':
            if key_resp_13.keys is None or key_resp_13.keys == '':
                feedback = "正确!"
                feedback_color = 'green'
                key_resp_13.corr = True
            else:
                feedback = "错误!"
                feedback_color = 'red'
                key_resp_13.corr = False

        # 累计正确响应次数
        if 'a' not in locals():  # 初始化a
            a = []

        a.append(key_resp_13.corr)
        b = sum(a)
    TextComponent text_7
      color [set every repeat] = $feedback_color
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $feedback
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  Routine 输入您配偶的名字及昵称
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = 请输入您配偶的名字
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  Routine 输入您配偶的名字及昵称_2
  Routine 输入2
    TextboxComponent textbox_neme2
      bold = False
      editable = True
      font = simhei
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 请输入昵称1
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        def button_pressed_2():
            try:
                # 加载现有的 Excel 文件
                wb = load_workbook('loop1.xlsx')
                ws = wb['Sheet1']  # 确保工作表名称正确

                # 读取 TextBox 中的文本
                if 'textbox_name2' in globals() and textbox_name2.text != '':
                    ws['A23'] = textbox_name2.text  # 写入到 A22 单元格

                # 保存更改
                wb.save('loop1.xlsx')
                wb.close()
                print("Data saved successfully!")
            except Exception as e:
                print(f"An error occurred: {e}")
    ButtonComponent button_2
      bold = True
      callback = button_pressed_2()
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Click here
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  Routine 输入3
    TextboxComponent textbox_name3
      bold = False
      editable = True
      font = simhei
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 请输入昵称2
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        def button_pressed_3():
            try:
                # 加载现有的 Excel 文件
                wb = load_workbook('loop1.xlsx')
                ws = wb['Sheet1']  # 确保工作表名称正确

                # 读取 TextBox 中的文本
                if 'textbox_name3' in globals() and textbox_name3.text != '':
                    ws['A24'] = textbox_name3.text  # 写入到 A22 单元格

                # 保存更改
                wb.save('loop1.xlsx')
                wb.close()
                print("Data saved successfully!")
            except Exception as e:
                print(f"An error occurred: {e}")
    ButtonComponent button_3
      bold = True
      callback = button_pressed_3()
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Click here
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  Routine 输入
    TextboxComponent textbox_name1
      bold = False
      editable = True
      font = SimHei
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 请输入名称
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    TextboxComponent textbox_name2
      bold = False
      editable = True
      font = SimHei
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 请输入昵称1
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    TextboxComponent textbox_name
      bold = False
      editable = True
      font = SimHei
      letterHeight = 0.05
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 请输入昵称2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # -*- coding: utf-8 -*-
        # 在每次实验开始时
        from openpyxl import load_workbook

        def button_pressed():
            # 加载现有的 Excel 文件
            wb = load_workbook('loop1_test.xlsx')
            ws = wb['Sheet1']  # 确保工作表名称正确

            # 读取 TextBox 中的文本
            if 'textbox_name1' in globals() and textbox_name1.text != '':
                ws['A12'] = textbox_name1.text  # 写入到 A12 单元格
            if 'textbox_name2' in globals() and textbox_name2.text != '':
                ws['A13'] = textbox_name2.text  # 写入到 A13 单元格
            if 'textbox_name' in globals() and textbox_name.text != '':
                ws['A14'] = textbox_name.text  # 写入到 A14 单元格

            # 保存更改
            wb.save('loop1_test.xlsx')
            wb.close()


            # 加载现有的 Excel 文件
            wb = load_workbook('loop2_test.xlsx')
            ws = wb['Sheet1']  # 确保工作表名称正确

            # 读取 TextBox 中的文本
            if 'textbox_name1' in globals() and textbox_name1.text != '':
                ws['A12'] = textbox_name1.text  # 写入到 A12 单元格
            if 'textbox_name2' in globals() and textbox_name2.text != '':
                ws['A13'] = textbox_name2.text  # 写入到 A13 单元格
            if 'textbox_name' in globals() and textbox_name.text != '':
                ws['A14'] = textbox_name.text  # 写入到 A14 单元格

            # 保存更改
            wb.save('loop2_test.xlsx')
            wb.close()
    ButtonComponent button
      bold = True
      callback = button_pressed()
      font = simhei
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = OK
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  Routine 正式指导语
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        请注意！！！
        当屏幕中央出现积极词、您配偶的名字或昵称时，
        请快速且准确的按键盘空格键。
        而当出现消极词时，
        请不要按任何键。
        明白后按任意键进入练习。
    KeyboardComponent key_resp_2
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine 指导语1
  Routine 输入
  Routine 正式指导语
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = loop1_test.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli1': '亲密的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '依恋的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '甜蜜的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '唯一的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '珍视的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '敌对的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli1': '排斥的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli1': '生疏的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli1': '抛弃的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli1': '讨厌的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli1': '李清银', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '瓜娃子', 'correct': 'space', 'signal': 'Go'},
      {'stimuli1': '老李头', 'correct': 'space', 'signal': 'Go'}]
    Routine 注视点
    Routine 刺激1
    Routine feedback1
    Routine 空屏1
  LoopTerminator block1
  Routine 结束语1
  Routine 指导语2
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = loop2_test.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli2': '亲密的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli2': '依恋的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli2': '甜蜜的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli2': '唯一的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli2': '珍视的', 'correct': 'None', 'signal': 'No-Go'},
      {'stimuli2': '敌对的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '排斥的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '生疏的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '抛弃的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '讨厌的', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '您配偶', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '瓜娃子', 'correct': 'space', 'signal': 'Go'},
      {'stimuli2': '老李头', 'correct': 'space', 'signal': 'Go'}]
    Routine 注视点
    Routine 刺激2
    Routine feedback2
    Routine 空屏1
  LoopTerminator block2
  Routine 结束语2
